
b:Gr/ViewA/Active	= "false"
b:Gr/ViewB/Active	= "false"
b:Gr/ViewC/Active	= "false"
b:Gr/ViewD/Active	= "false"

#sv:Ph/Default/Modules = 1 "g4em-standard_opt1"
#d:Ph/Default/CutForElectron = 0.5 um # overrides CutForAllParticles for Electron
sv:Ph/Default/Modules = 2 "g4em-standard_opt4" "g4em-penelope"

i:Ts/ShowHistoryCountAtInterval = 100000
i:Ts/NumberOfThreads = 0

sv:Ma/LAB/Components = 2 "Carbon" "Hydrogen"
# H28 C17
uv:Ma/LAB/Fractions = 2 0.8786 0.1214
d:Ma/LAB/Density = 0.860 g/cm3
d:Ma/LAB/MeanExcitationEnergy = 59.4 eV


b:Ts/PauseBeforeQuit = "false"

includeFile = /home/kepler/pet_simulations/derenzo/derenzo_300keV_100.topas

s:Ge/Derenzo/Parent = "AirBox"

background_e = 30
rod_e = 00090

#s:Ge/Center_Water/Parent  	= "AirBox"
#s:Ge/Center_Water/Type    	= "TsCylinder"
#s:Ge/Center_Water/Material	= "G4_WATER"
#d:Ge/Center_Water/Rmax     	= .106 m
#d:Ge/Center_Water/HL		= .2 m
#d:Ge/Center_Water/TransX  	= 0. m
#d:Ge/Center_Water/TransY  	= 0. m
#d:Ge/Center_Water/TransZ  	= 0. m
#d:Ge/Center_Water/MaxStepSize	= 1. mm
#s:Ge/Center_Water/Color  	= "green"

s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 10.0 m
d:Ge/World/HLY       = 10.0 m
d:Ge/World/HLZ       = 10.0 m
b:Ge/World/Invisible = "TRUE"

s:Ge/AirBox/Material	= "Air"
s:Ge/AirBox/Type    	= "TsBox"
d:Ge/AirBox/HLX	= 10.0 m
d:Ge/AirBox/HLY	= 10.0 m
d:Ge/AirBox/HLZ	= 10.0 m
s:Ge/AirBox/Parent	= "world"
b:Ge/AirBox/Invisible	= "true"



#s:Ge/SphereSource/Type     		= "TsSphere"
#s:Ge/SphereSource/Parent   		= "Center_Water"
#sc:Ge/SphereSource/Material 		= "G4_WATER"
#dc:Ge/SphereSource/RMax     		= 10 mm
#dc:Ge/SphereSource/TransZ   		= 0. cm
#dc:Ge/SphereSource/TransY		= 0. cm
#dc:Ge/SphereSource/TransX		= 09. cm
#s:Ge/SphereSource/color		= "red"
#d:Ge/SphereSource/MaxStepSize	= 1. um
#s:Ge/SphereSource/DrawingStyle	= "wireframe"





s:Ge/DetectorVolume/Type	= "TsCylinder"
s:Ge/DetectorVolume/Parent	= "AirBox"
d:Ge/DetectorVolume/HL		= 1 m
d:Ge/DetectorVolume/RMin	= 0.45 m
d:Ge/DetectorVolume/RMax	= 0.75 m
s:Ge/DetectorVolume/Material	= "LAB"
#d:Ge/DetectorVolume/MaxStepSize	= 1. mm
d:Ge/DetectorVolume/MinStepSize 	= 0.01 mm


#s:So/Positrons/Type				= "Volumetric"
#s:So/Positrons/Component			= "SphereSource"
#s:So/Positrons/ActiveMaterial			= "G4_WATER"
#s:So/Positrons/BeamParticle			= "e+"
#d:So/Positrons/BeamEnergy			= 0.6335 MeV
#b:So/Positrons/RecursivelyIncludeChildren 	= "True"
#ic:So/Positrons/NumberOfHistoriesInRun 	= 1000000

i:Ts/Seed = 26
#i:Ts/FindSeedForHistory = 8
#s:Ts/SeedFile = "TopasSeedForRun_0_History_8.txt"

s:Sc/TruthTuple/Quantity			= "MyNtupleEnergy"
s:Sc/TruthTuple/Component			= "AirBox"
b:Sc/TruthTuple/PropagateToChildren	= "True"
s:Sc/TruthTuple/OutputType			= "ASCII"
s:Sc/TruthTuple/IfOutputFileAlreadyExists	= "Overwrite"
b:Sc/TruthTuple/Active				= "False"


s:Sc/DetectorTuple/Quantity			= "MyNtupleEnergy"
s:Sc/DetectorTuple/Component			= "DetectorVolume"
b:Sc/DetectorTuple/PropagateToChildren	= "True"
s:Sc/DetectorTuple/OutputType			= "binary"
s:Sc/DetectorTuple/IfOutputFileAlreadyExists	= "Overwrite"

s:Gr/ViewA/Type           = "OpenGL"
sv:Gr/ViewA/VisibleWorlds = 1 "All"
i:Gr/ViewA/WindowSizeX    = 900
i:Gr/ViewA/WindowSizeY    = 900
d:Gr/ViewA/Theta          = 45 deg
d:Gr/ViewA/Phi            = 0 deg
u:Gr/ViewA/Zoom	   = 5

s:Gr/ViewB/Type           = "OpenGL"
sv:Gr/ViewB/VisibleWorlds = 1 "All"
i:Gr/ViewB/WindowSizeX    = 900
i:Gr/ViewB/WindowSizeY    = 900
d:Gr/ViewB/Theta          = 45 deg
d:Gr/ViewB/Phi            = 45 deg
u:Gr/ViewB/Zoom	   = 1

s:Gr/ViewC/Type           = "OpenGL"
sv:Gr/ViewC/VisibleWorlds = 1 "All"
i:Gr/ViewC/WindowSizeX    = 900
i:Gr/ViewC/WindowSizeY    = 900
d:Gr/ViewC/Theta          = 90 deg
d:Gr/ViewC/Phi            = 0 deg
u:Gr/ViewC/Zoom	   = 40

s:Gr/ViewD/Type           = "OpenGL"
sv:Gr/ViewD/VisibleWorlds = 1 "All"
i:Gr/ViewD/WindowSizeX    = 900
i:Gr/ViewD/WindowSizeY    = 900
d:Gr/ViewD/Theta          = 0 deg
d:Gr/ViewD/Phi            = 0 deg
u:Gr/ViewD/Zoom	   = 2



